global device ML_STAR ("SimplePlateStamp.lay", "ML_STAR", hslTrue);
#include "SimplePlateStamp.res"
 namespace _Method { #include "C:\\Users\\miike\\source\\repos\\orca\\drivers\\orca-driver-venus\\venus_submethod\\Orca.hs_" }
variable int_ejectTipsPosition;
variable int_cLLD;
variable int_numberOfPlates;
variable loopCounter1;
variable loopCounter2;
variable int_waitTime;
timer timer1;
variable flt_waterVol;
variable flt_dyeVol;
variable str_stage;
dialog dialogHandle1;
 namespace _Method { #include "HSLMETEDLib.hs_" }
 namespace _Method { #include "HSLMECCLib.hs_" }
 namespace _Method { #include "HSLPTLLib.hsl" }
 namespace _Method { #include "templates\\HSLPipetteWizard.hsl" }
 namespace _Method { #include "HSLSchedCCLib.hs_" }
 namespace _Method {  #include __filename__ ".sub"  }

namespace _Method { method main(  ) void {
    PTL::SetWashingStateDefault("RinseTime1", 5);
    PTL::SetWashingStateDefault("SoakTime1", 5);
    PTL::SetWashingStateDefault("FlowRate1", 11);
    PTL::SetWashingStateDefault("RinseTime2", 0);
    PTL::SetWashingStateDefault("SoakTime2", 0);
    PTL::SetWashingStateDefault("FlowRate2", 11);
    PTL::SetWashingStateDefault("DrainingTime", 10);
    PTL::SetWashingStateDefault("StartWashLiquid", 0);
    PTL::SetLoadingStateDefault("RecoveryOptionContinue", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionExclude", hslTrue);
    PTL::SetLoadingStateDefault("RecoveryOptionDefault", 0);
    PTL::SetLoadingStateDefault("KitLotCheckEnabled", hslFalse);
    ORCA::_InitLibrary();
    ::RegisterAbortHandler( "OnAbort");
    ML_STAR._1C0C0CB0_7C87_11D3_AD83_0004ACB1DCB2("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"); // Initialize
    ORCA::Initialize(0);
    ORCA::GetConfigProperty_String(Translate("stage"), Translate("sim"), str_stage);
    ORCA::GetConfigProperty_Integer(Translate("numOfPlates"), 4, int_numberOfPlates);
    ORCA::GetConfigProperty_Float(Translate("waterVol"), 1, flt_waterVol);
    ORCA::GetConfigProperty_Float(Translate("dyeVol"), 2, flt_dyeVol);
    ORCA::GetConfigProperty_Integer(Translate("clld"), 5, int_cLLD);
    ORCA::GetConfigProperty_Integer(Translate("wait"), 10, int_waitTime);
    ORCA::GetConfigProperty_Integer(Translate("tipEjectPos"), 2, int_ejectTipsPosition);
    dialogHandle1.SetOutput(Translate("stage: "), str_stage, "\n", Translate("Number of Plates: "), int_numberOfPlates, "\n", Translate("Water Volume: "), flt_waterVol, "\n", Translate("Dye Volume: "), flt_dyeVol, "\n", Translate("cLLD: "), int_cLLD, "\n", Translate("Wait Time: "), int_waitTime, "\n", Translate("Tip Eject Setting: "), int_ejectTipsPosition, "\n");
    dialogHandle1.ShowOutput(Translate("Orca Parameters"), hslOKOnly | hslInformation | hslDefButton1, hslInfinite);
    ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
    {
      for(loopCounter1 = 0; loopCounter1 < int_numberOfPlates;)
      {
        loopCounter1 = loopCounter1 + 1;
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
      }
    }
    ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
    ML_STAR.destinations.SetCurrentPosition(1);
    {
      for(loopCounter2 = 0; loopCounter2 < int_numberOfPlates;)
      {
        loopCounter2 = loopCounter2 + 1;
        timer1.SetTimerViewName("Timer");
        if( 0 == timer1.SetTimer(int_waitTime) )
        {
              MECC::RaiseRuntimeErrorEx(-1355939584, MECC::IDS::stepNameTimerStart, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        if( 0 == timer1.WaitTimer(hslTrue, hslTrue) )
        {
              MECC::RaiseRuntimeErrorEx(-1339162368, MECC::IDS::stepNameTimerWait, MECC::IDS::errorStepFailed, "", "HxMetEdCompCmd");
        }
        ML_STAR._BD0D210B_0816_4C86_A903_D6B2DF73F78B("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"); // Head96TipPickUp
        ML_STAR._827392A0_B7E8_4472_9ED3_B45B71B5D27A("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"); // Head96Aspirate
        ML_STAR._A48573A5_62ED_4951_9EF9_03207EFE34FB("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"); // Head96Dispense
        ML_STAR._2880E77A_3D6D_40FE_AF57_1BD1FE13960C("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"); // Head96TipEject
      }
    }
    ORCA::_ExitLibrary();
  } }
